# 1 "C:/Bruker/TopSpin3.2.6/exp/stan/nmr/lists/pp/user/zg60_ncl"
;zg30
;avance-version (12/01/11)
;1D sequence
;using 60 degree flip angle
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;$RECOMMEND=y


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"acqt0=-p1*0.66/3.1416"


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define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d1
  p1*0.67 ph1
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

  MCWRK
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exit
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ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;ns: 1 * n, total number of scans: NS * TD0
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;$Id: zg60 edited by W  21_05_2014
